PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = script
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Routines
  Routine trial
    TextComponent text1
      color = blue
      letterHeight = 0.1
      pos = (-0.75, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      text [set every repeat] = $word1
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    SoundComponent sound1
      sound [set every repeat] = $wrecord1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text2
      color = blue
      letterHeight = 0.1
      pos = (-0.25, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6
      text [set every repeat] = $word2
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    SoundComponent sound2
      sound [set every repeat] = $wrecord2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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    TextComponent prime_text
      color = blue
      letterHeight = 0.1
      pos = (0.25, 0)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4.5
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      text [set every repeat]:
        $prime
    SoundComponent prime_sound
      sound [set every repeat] = $precord3
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
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    TextComponent target_text
      color = red
      letterHeight = 0.1
      pos = (0.75, 0)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $target
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    MicrophoneComponent pan_record
      channel = 0
      startVal [time (s)] = 4.5
      stereo = False
      stopVal [duration (s)] = 3
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  Routine End
    TextComponent End_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the session.

        Please see the researcher for further instructions.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    TextComponent text1_2
      color = blue
      letterHeight = 0.1
      pos = (-0.75, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      text [set every repeat] = $word1
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    SoundComponent sound1_2
      sound [set every repeat] = $wrecord1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text2_2
      color = blue
      letterHeight = 0.1
      pos = (-0.25, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6
      text [set every repeat] = $word2
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    SoundComponent sound2_2
      sound [set every repeat] = $wrecord2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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    TextComponent prime_text_2
      color = blue
      letterHeight = 0.1
      pos = (0.25, 0)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4.5
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      text [set every repeat]:
        $prime
    SoundComponent prime_sound_2
      sound [set every repeat] = $precord3
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
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    TextComponent target_text_2
      color = red
      letterHeight = 0.1
      pos = (0.75, 0)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $target
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    MicrophoneComponent pan_record_2
      channel = 0
      startVal [time (s)] = 4.5
      stereo = False
      stopVal [duration (s)] = 3
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    TextComponent record_notification_2
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 3
      text [set every repeat] = Please say the word: pan
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    TextComponent instruction
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      text = Please view and listen to the blue words and pronounce the red word AS SOON AS YOU SEE IT.
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  Routine practice_instruction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = To familiarize you with the task, we ask you to first complete a few practices.
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    TextComponent text_2
      color = White
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press the space key to proceed.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Begin
    TextComponent instructiontext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this study, you will perform a simple task of looking at, listening to and speaking some words in English and Mandarin.

        Specifically, you will first view and listen to a short list of individual words in blue.

        Then you will read out loud a red word AS FAST AS YOU CAN when it shows up on the screen.
    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Key
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space key to proceed.
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  Routine trail_instruction
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Thank you for completing the practice.
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    TextComponent text_4
      color = White
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please press the space key to proceed to the actual study. 
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Note that the task is the same as the practice. 
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trail_Start
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Actual trials start.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Begin
  Routine practice_instruction
  LoopInitiator practices loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = Practice condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'Mob'), ('word2', 'Egg'), ('prime', 'Fun'), ('target', '买'), ('wrecord1', 'Mob.wav'), ('wrecord2', 'Egg.wav'), ('precord3', 'Fun.wav'), ('Rname', '买_practice_English')]),
      OrderedDict([('word1', 'Tin'), ('word2', 'Tag'), ('prime', 'Toy'), ('target', '褐'), ('wrecord1', 'Tin.wav'), ('wrecord2', 'Tag.wav'), ('precord3', 'Toy.wav'), ('Rname', '褐_practice_English')]),
      OrderedDict([('word1', 'Bun'), ('word2', 'Ant'), ('prime', 'Mud'), ('target', '需'), ('wrecord1', 'Bun.wav'), ('wrecord2', 'Ant.wav'), ('precord3', 'Mud.wav'), ('Rname', '需_practice_English')]),
      OrderedDict([('word1', 'Flu'), ('word2', 'Due'), ('prime', 'Hum'), ('target', '影'), ('wrecord1', 'Flu.wav'), ('wrecord2', 'Due.wav'), ('precord3', 'Hum.wav'), ('Rname', '影_practice_English')]),
      OrderedDict([('word1', 'Fog'), ('word2', 'Eve'), ('prime', 'Rib'), ('target', '露'), ('wrecord1', 'Fog.wav'), ('wrecord2', 'Eve.wav'), ('precord3', 'Rib.wav'), ('Rname', '露_practice_English')]),
      OrderedDict([('word1', '触'), ('word2', '纪'), ('prime', '港'), ('target', '沾'), ('wrecord1', 'Chu4.wav'), ('wrecord2', 'Ji4.wav'), ('precord3', 'Gang3.wav'), ('Rname', '沾_practice_Mandarin')]),
      OrderedDict([('word1', '畅'), ('word2', '呈'), ('prime', '祷'), ('target', '覆'), ('wrecord1', 'Chang4.wav'), ('wrecord2', 'Cheng2.wav'), ('precord3', 'Dao3.wav'), ('Rname', '覆_practice_Mandarin')])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
    Routine practice
  LoopTerminator practices
  Routine trail_instruction
  Routine trail_Start
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:16
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'Opt'), ('word2', 'Ash'), ('prime', 'Bay'), ('target', '败'), ('wrecord1', 'Opt.wav'), ('wrecord2', 'Ash.wav'), ('precord3', 'Bay.wav'), ('Rname', '败_far_English_consonant')]),
      OrderedDict([('word1', 'Fog'), ('word2', 'Eve'), ('prime', 'Bee'), ('target', '币'), ('wrecord1', 'Fog.wav'), ('wrecord2', 'Eve.wav'), ('precord3', 'Bee.wav'), ('Rname', '币_close_English_consonant')]),
      OrderedDict([('word1', 'Sea'), ('word2', 'Ant'), ('prime', 'Bun'), ('target', '搬'), ('wrecord1', 'Sea.wav'), ('wrecord2', 'Ant.wav'), ('precord3', 'Bun.wav'), ('Rname', '搬_close_English_vowel')]),
      OrderedDict([('word1', 'Box'), ('word2', 'Paw'), ('prime', 'Bye'), ('target', '败'), ('wrecord1', 'Box.wav'), ('wrecord2', 'Paw.wav'), ('precord3', 'Bye.wav'), ('Rname', '败_close_English_consonant')]),
      OrderedDict([('word1', 'Dam'), ('word2', 'Arm'), ('prime', 'Done'), ('target', '单'), ('wrecord1', 'Dam.wav'), ('wrecord2', 'Arm.wav'), ('precord3', 'Done.wav'), ('Rname', '单_close_English_vowel')]),
      OrderedDict([('word1', 'Ice'), ('word2', 'Jet'), ('prime', 'Hip'), ('target', '僻'), ('wrecord1', 'Ice.wav'), ('wrecord2', 'Jet.wav'), ('precord3', 'Hip.wav'), ('Rname', '僻_far_English_consonant')]),
      OrderedDict([('word1', 'Pin'), ('word2', 'Gum'), ('prime', 'Hum'), ('target', '弹'), ('wrecord1', 'Pin.wav'), ('wrecord2', 'Gum.wav'), ('precord3', 'Hum.wav'), ('Rname', '弹_far_English_vowel')])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
    Routine trial
  LoopTerminator trials
  Routine End
